CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:25
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Well>[0-9]{6})-(?P<Field>[0-9])-(?P<Channel>[0-9]{9})\.tif$
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:OrigBlue
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:OrigBlue
    Name the output image:RescaleIntensity_spots
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0095,0.035
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
RescaleIntensity:[module_num:6|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enabled:False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
    Select the input image:OrigBlue
    Name the output image:RescaleIntensity
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.005,0.035
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
RescaleIntensity:[module_num:7|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enabled:False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
    Select the input image:RescaleIntensity
    Name the output image:RescaleIntensity1
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.15,1
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
RescaleIntensity:[module_num:8|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
    Select the input image:OrigBlue
    Name the output image:Rescale_cytoplasm
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.001,0.018
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
RescaleIntensity:[module_num:9|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
    Select the input image:OrigBlue
    Name the output image:RescaleIntensity_overlay
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.001,0.2
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
RescaleIntensity:[module_num:10|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enabled:False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
    Select the input image:OrigBlue
    Name the output image:RescaleIntensity_nuclei
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.01,0.05
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
RunCellpose:[module_num:11|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
    Select the input image:OrigBlue
    Rescale images before running Cellpose:Yes
    Run CellPose in docker or local python environment:Python
    Select Cellpose docker image:cellprofiler/runcellpose_with_pretrained:2.3.2
    Expected object diameter:30
    Detection mode:nuclei
    Name the output object:preNuclei
    Use GPU:Yes
    Use averaging:No
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.5
    Cell probability threshold:0.0
    GPU memory share for each worker:1.0
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:25
    Use Omnipose for mask reconstruction:No
    Invert images:No
    Remove objects that are touching the edge?:Yes

RunCellpose:[module_num:12|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notes:['']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enabled:False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
    Select the input image:RescaleIntensity
    Rescale images before running Cellpose:No
    Run CellPose in docker or local python environment:Python
    Select Cellpose docker image:cellprofiler/runcellpose_with_pretrained:2.3.2
    Expected object diameter:30
    Detection mode:nuclei
    Name the output object:Nuclei
    Use GPU:Yes
    Use averaging:No
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.5
    Cell probability threshold:0.0
    GPU memory share for each worker:1.0
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:25
    Use Omnipose for mask reconstruction:No
    Invert images:No
    Remove objects that are touching the edge?:Yes

MeasureObjectSizeShape:[module_num:13|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
    Select object sets to measure:preNuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

EnhanceOrSuppressFeatures:[module_num:14|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
    Select the input image:RescaleIntensity_spots
    Name the output image:EnhancedBlue
    Select the operation:Enhance
    Feature size:5
    Feature type:Speckles
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    Speed and accuracy:Slow
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
RescaleIntensity:[module_num:15|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
    Select the input image:EnhancedBlue
    Name the output image:RescaleEnhanced
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.01,0.5
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
FilterObjects:[module_num:16|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
    Select the objects to filter:preNuclei
    Name the output objects:Nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:RemovedObjects
    Select the measurement to filter by:AreaShape_MajorAxisLength
    Filter using a minimum measurement value?:Yes
    Minimum value:22
    Filter using a maximum measurement value?:No
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
IdentifySecondaryObjects:[module_num:17|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cell
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:Rescale_cytoplasm
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    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredNuclei
    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.4,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyTertiaryObjects:[module_num:18|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
    Select the larger identified objects:Cell
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MaskImage:[module_num:19|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
    Select the input image:RescaleEnhanced
    Name the output image:MaskedEnhancedBlue
    Use objects or an image as a mask?:Objects
    Select object for mask:Cytoplasm
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:20|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
    Select the input image:MaskedEnhancedBlue
    Name the primary objects to be identified:Spots
    Typical diameter of objects, in pixel units (Min,Max):3,5
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.2,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
RunCellpose:[module_num:21|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enabled:False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
    Select the input image:MaskedEnhancedBlue
    Rescale images before running Cellpose:Yes
    Run CellPose in docker or local python environment:Python
    Select Cellpose docker image:cellprofiler/runcellpose_with_pretrained:2.3.2
    Expected object diameter:6
    Detection mode:nuclei
    Name the output object:Spots
    Use GPU:Yes
    Use averaging:Yes
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.4
    Cell probability threshold:0.0
    GPU memory share for each worker:1.0
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:3
    Use Omnipose for mask reconstruction:Yes
    Invert images:No
    Remove objects that are touching the edge?:Yes

OverlayOutlines:[module_num:22|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensity_overlay
    Name the output image:Overlays
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:Red
    Select objects to display:Spots
    Select outline color:#FFFF98
    Select objects to display:Cell
    Select outline color:#1EACFF
    Select objects to display:Nuclei

SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:Overlays
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigBlue
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|ROIs
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

RelateObjects:[module_num:24|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
    Parent objects:Cell
    Child objects:Spots
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
ExportToSpreadsheet:[module_num:25|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|results/
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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