CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>[0-9]{6})-(?P<Site>[0-9])-(?P<Other>[0-9]{9})\.tif$
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
HistogramEqualization:[module_num:5|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
    Select the input image:DNA
    Name the output image:HistogramEqualization
    Bins:180
    Mask:DNA
    Local:No
    Tile Size:50
    Clip limit:0.01
    Is your image 3D?:No
    Do framewise calculation?:No
    Tile Size (Z):5

EnhanceOrSuppressFeatures:[module_num:6|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
    Select the input image:DNA
    Name the output image:Spots
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
RunCellpose:[module_num:7|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
    Select the input image:DNA
    Rescale images before running Cellpose:Yes
    Run CellPose in docker or local python environment:Python
    Select Cellpose docker image:cellprofiler/runcellpose_with_pretrained:2.3.2
    Expected object diameter:30
    Detection mode:nuclei
    Name the output object:Nuclei_cellpose
    Use GPU:Yes
    Use averaging:No
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.5
    Cell probability threshold:0.0
    GPU memory share for each worker:1.0
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:15
    Use Omnipose for mask reconstruction:No
    Invert images:No
    Remove objects that are touching the edge?:Yes

IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:Nuclei_cellpose
    Name the objects to be identified:Cell
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:HistogramEqualization
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.6,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyTertiaryObjects:[module_num:9|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
    Select the larger identified objects:Cell
    Select the smaller identified objects:Nuclei_cellpose
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MaskImage:[module_num:10|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
    Select the input image:Spots
    Name the output image:Mask
    Use objects or an image as a mask?:Objects
    Select object for mask:Cytoplasm
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:Mask
    Name the primary objects to be identified:spots
    Typical diameter of objects, in pixel units (Min,Max):3,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:0.6
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
OverlayOutlines:[module_num:12|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:SanityCheck
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:spots
    Select outline color:white
    Select objects to display:Cell
    Select outline color:#0078ED
    Select objects to display:Nuclei_cellpose

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:SanityCheck
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay
    Saved file format:tiff
    Output file location:Elsewhere...|results/ROIs
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectNeighbors:[module_num:14|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
    Select objects to measure:Nuclei_cellpose
    Select neighboring objects to measure:Nuclei_cellpose
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
RelateObjects:[module_num:15|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
    Parent objects:Cell
    Child objects:spots
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
MeasureObjectSizeShape:[module_num:16|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
    Select object sets to measure:Nuclei_cellpose, spots
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:17|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|results/
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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